<CompuCell3D version="3.6.0">

    <!-- Basic properties of CPM (GGH) algorithm -->
    <Potts>
        <Dimensions x="128" y="128" z="1"/>
        <Steps>10000</Steps>
        <Temperature>10.0</Temperature>
        <NeighborOrder>1</NeighborOrder>
    </Potts>


    <!-- Listing all cell types in the simulation -->
    <Plugin Name="CellType">
        <CellType TypeId="0" TypeName="Medium"/>
        <CellType TypeId="1" TypeName="SecretingCells"/>
        <CellType TypeId="2" TypeName="NonSecretingCells"/>
        <CellType TypeId="3" TypeName="Melanophores"/>
        <CellType TypeId="4" TypeName="Xanthophores"/>
        <CellType TypeId="5" Freeze="" TypeName="wall"/>
        <CellType TypeId="6" TypeName="Melanophores2"/>
        <CellType TypeId="7" TypeName="Xanthophores2"/>

    </Plugin>

    <!-- Constraint on cell volume. Each cell type has different constraint. -->
    <!-- For more flexible specification of the constraint (done in Python) please use VolumeLocalFlex plugin -->
<Plugin Name="Volume">
   <VolumeEnergyParameters CellType="SecretingCells" LambdaVolume="0.0" TargetVolume="25.0"/>
   <VolumeEnergyParameters CellType="NonSecretingCells" LambdaVolume="0.0" TargetVolume="25.0"/>
   <VolumeEnergyParameters CellType="Melanophores" LambdaVolume="15.0" TargetVolume="10.0"/>
   <VolumeEnergyParameters CellType="Xanthophores" LambdaVolume="15.0" TargetVolume="10.0"/>
   <VolumeEnergyParameters CellType="wall" LambdaVolume="2.0" TargetVolume="50.0"/>
   <VolumeEnergyParameters CellType="Melanophores2" LambdaVolume="15.0" TargetVolume="10.0"/>
   <VolumeEnergyParameters CellType="Xanthophores2" LambdaVolume="15.0" TargetVolume="10.0"/>
</Plugin>



<Plugin Name="PixelTracker">
   
   <!-- Module tracking pixels of each cell -->
</Plugin>

    <!-- Module tracking center of mass of each cell -->
    <Plugin Name="CenterOfMass"/>

    <!-- Specification of adhesion energies -->
<Plugin Name="Contact">
   <!-- Specification of adhesion energies -->
   <Energy Type1="Medium" Type2="Medium">10.0</Energy>
   <Energy Type1="Medium" Type2="SecretingCells">10.0</Energy>
   <Energy Type1="Medium" Type2="NonSecretingCells">10.0</Energy>
   <Energy Type1="Medium" Type2="Melanophores">10.0</Energy>
   <Energy Type1="Medium" Type2="Xanthophores">10.0</Energy>
   <Energy Type1="Medium" Type2="wall">10.0</Energy>
   <Energy Type1="Medium" Type2="Melanophores2">10.0</Energy>
   <Energy Type1="Medium" Type2="Xanthophores2">10.0</Energy>
   <Energy Type1="SecretingCells" Type2="SecretingCells">10.0</Energy>
   <Energy Type1="SecretingCells" Type2="NonSecretingCells">10.0</Energy>
   <Energy Type1="SecretingCells" Type2="Melanophores">10.0</Energy>
   <Energy Type1="SecretingCells" Type2="Xanthophores">10.0</Energy>
   <Energy Type1="SecretingCells" Type2="wall">10.0</Energy>
   <Energy Type1="SecretingCells" Type2="Melanophores2">10.0</Energy>
   <Energy Type1="SecretingCells" Type2="Xanthophores2">10.0</Energy>
   <Energy Type1="NonSecretingCells" Type2="NonSecretingCells">10.0</Energy>
   <Energy Type1="NonSecretingCells" Type2="Melanophores">10.0</Energy>
   <Energy Type1="NonSecretingCells" Type2="Xanthophores">10.0</Energy>
   <Energy Type1="NonSecretingCells" Type2="wall">10.0</Energy>
   <Energy Type1="NonSecretingCells" Type2="Melanophores2">10.0</Energy>
   <Energy Type1="NonSecretingCells" Type2="Xanthophores2">10.0</Energy>
   <Energy Type1="Melanophores" Type2="Melanophores">25.0</Energy>
   <Energy Type1="Melanophores" Type2="Xanthophores">25.0</Energy>
   <Energy Type1="Melanophores" Type2="wall">15.0</Energy>
   <Energy Type1="Melanophores" Type2="Melanophores2">25.0</Energy>
   <Energy Type1="Melanophores" Type2="Xanthophores2">25.0</Energy>
   <Energy Type1="Xanthophores" Type2="Xanthophores">25.0</Energy>
   <Energy Type1="Xanthophores" Type2="wall">15.0</Energy>
   <Energy Type1="Xanthophores" Type2="Melanophores2">25.0</Energy>
   <Energy Type1="Xanthophores" Type2="Xanthophores2">25.0</Energy>
   <Energy Type1="wall" Type2="wall">10.0</Energy>
   <Energy Type1="wall" Type2="Melanophores2">15.0</Energy>
   <Energy Type1="wall" Type2="Xanthophores2">25.0</Energy>
   <Energy Type1="Melanophores2" Type2="Melanophores2">25.0</Energy>
   <Energy Type1="Melanophores2" Type2="Xanthophores2">25.0</Energy>
   <Energy Type1="Xanthophores2" Type2="Xanthophores2">25.0</Energy>
   <NeighborOrder>2</NeighborOrder>
</Plugin>
<Plugin Name="Secretion">

</Plugin>
<Steppable Type="DiffusionSolverFE">
   
   <!-- Specification of PDE solvers -->
   <DiffusionField Name="Melanophore">
      <DiffusionData>
         <FieldName>Melanophore</FieldName>
         <GlobalDiffusionConstant>1.0</GlobalDiffusionConstant>
         <GlobalDecayConstant>0.000625</GlobalDecayConstant>
         <!-- Additional options are: -->
         <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
         <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
         
      </DiffusionData>
      <SecretionData>
         <!-- When secretion is defined inside DissufionSolverFE all secretion constants are scaled automaticaly to account for the extra calls to the diffusion step when handling large diffusion constants -->
         
         <!-- Uniform secretion Definition -->

         <Secretion Type="Melanophores">0.00625</Secretion>
         <Secretion Type="Melanophores2">0.00625</Secretion>
 
         <!-- <SecretionOnContact SecreteOnContactWith="SecretingCells,NonSecretingCells,Melanophores,Xanthophores,wall,Melanophores2,Xanthophores2" Type="Xanthophores2">0.2</SecretionOnContact> -->
         <!-- <ConstantConcentration Type="Xanthophores2">0.1</ConstantConcentration> -->
      </SecretionData>
      <BoundaryConditions>
         <Plane Axis="X">
            <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
            <!-- <ConstantValue PlanePosition="Max" Value="5.0"/> -->
            <!-- Other options are (examples): -->
            <Periodic/>
            <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
         </Plane>
         <Plane Axis="Y">
            <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
            <!-- <ConstantDerivative PlanePosition="Max" Value="5.0"/> -->
            <!-- Other options are (examples): -->
            <Periodic/>
            <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
         </Plane>
      </BoundaryConditions>
   </DiffusionField>
   <DiffusionField Name="Xanthophore">
      <DiffusionData>
         <FieldName>Xanthophore</FieldName>
         <GlobalDiffusionConstant>1.0</GlobalDiffusionConstant>
         <GlobalDecayConstant>0.000625</GlobalDecayConstant>
         
      </DiffusionData>
      <SecretionData>
         <!-- When secretion is defined inside DissufionSolverFE all secretion constants are scaled automaticaly to account for the extra calls to the diffusion step when handling large diffusion constants -->
         
         <!-- Uniform secretion Definition -->     
         <Secretion Type="Xanthophores">0.00625</Secretion>
  
         <Secretion Type="Xanthophores2">0.00625</Secretion>
         <!-- <SecretionOnContact SecreteOnContactWith="SecretingCells,NonSecretingCells,Melanophores,Xanthophores,wall,Melanophores2,Xanthophores2" Type="Xanthophores2">0.2</SecretionOnContact> -->
         <!-- <ConstantConcentration Type="Xanthophores2">0.1</ConstantConcentration> -->
      </SecretionData>
      <BoundaryConditions>
         <Plane Axis="X">
            <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
            <!-- <ConstantValue PlanePosition="Max" Value="5.0"/> -->
            <!-- Other options are (examples): -->
            <Periodic/>
            <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
         </Plane>
         <Plane Axis="Y">
            <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
            <!-- <ConstantDerivative PlanePosition="Max" Value="5.0"/> -->
            <!-- Other options are (examples): -->
            <Periodic/>
            <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
         </Plane>
      </BoundaryConditions>
   </DiffusionField>
   <DiffusionField Name="Melanophores2">
      <DiffusionData>
         <FieldName>Melanophores2</FieldName>
         <GlobalDiffusionConstant>0.3</GlobalDiffusionConstant>
         <GlobalDecayConstant>0.000625</GlobalDecayConstant>
         
      </DiffusionData>
      <SecretionData>
         <!-- When secretion is defined inside DissufionSolverFE all secretion constants are scaled automaticaly to account for the extra calls to the diffusion step when handling large diffusion constants -->
         
         <!-- Uniform secretion Definition -->     
         <Secretion Type="Melanophores">0.00625</Secretion>
  
         <Secretion Type="Melanophores2">0.00625</Secretion>
         <!-- <SecretionOnContact SecreteOnContactWith="SecretingCells,NonSecretingCells,Melanophores,Xanthophores,wall,Melanophores2,Xanthophores2" Type="Xanthophores2">0.2</SecretionOnContact> -->
         <!-- <ConstantConcentration Type="Xanthophores2">0.1</ConstantConcentration> -->
      </SecretionData>
      <BoundaryConditions>
         <Plane Axis="X">
            <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
            <!-- <ConstantValue PlanePosition="Max" Value="5.0"/> -->
            <!-- Other options are (examples): -->
            <Periodic/>
            <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
         </Plane>
         <Plane Axis="Y">
            <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
            <!-- <ConstantDerivative PlanePosition="Max" Value="5.0"/> -->
            <!-- Other options are (examples): -->
            <Periodic/>
            <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
         </Plane>
      </BoundaryConditions>
   </DiffusionField>
   <DiffusionField Name="Xanthophores2">
      <DiffusionData>
         <FieldName>Xanthophores2</FieldName>
         <GlobalDiffusionConstant>0.3</GlobalDiffusionConstant>
         <GlobalDecayConstant>0.000625</GlobalDecayConstant>
         
      </DiffusionData>
      <SecretionData>
         <!-- When secretion is defined inside DissufionSolverFE all secretion constants are scaled automaticaly to account for the extra calls to the diffusion step when handling large diffusion constants -->
         
         <!-- Uniform secretion Definition -->     
         <Secretion Type="Xanthophores">0.00625</Secretion>
  
         <Secretion Type="Xanthophores2">0.00625</Secretion>
         <!-- <SecretionOnContact SecreteOnContactWith="SecretingCells,NonSecretingCells,Melanophores,Xanthophores,wall,Melanophores2,Xanthophores2" Type="Xanthophores2">0.2</SecretionOnContact> -->
         <!-- <ConstantConcentration Type="Xanthophores2">0.1</ConstantConcentration> -->
      </SecretionData>
      <BoundaryConditions>
         <Plane Axis="X">
            <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
            <!-- <ConstantValue PlanePosition="Max" Value="5.0"/> -->
            <!-- Other options are (examples): -->
            <Periodic/>
            <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
         </Plane>
         <Plane Axis="Y">
            <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
            <!-- <ConstantDerivative PlanePosition="Max" Value="5.0"/> -->
            <!-- Other options are (examples): -->
            <Periodic/>
            <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
         </Plane>
      </BoundaryConditions>
   </DiffusionField>
</Steppable>


    <!-- Specification of PDE solvers -->
    <Steppable Type="ReactionDiffusionSolverFE">
        <DiffusionField>
            <DiffusionData>
                <FieldName>u</FieldName>
                <!-- 0.02 -->
                <DiffusionConstant>0.32</DiffusionConstant>
                <GlobalDecayConstant>0.02</GlobalDecayConstant>
                <AdditionalTerm>min(0.5,max(0,-0.04*v-0.055*w+0.37))</AdditionalTerm>
            </DiffusionData>
            <SecretionData>
                <!-- 0.4 -->
                <Secretion Type="SecretingCells">0.4</Secretion>
            </SecretionData>
        </DiffusionField>
        <DiffusionField>
            <DiffusionData>
                <FieldName>v</FieldName>
                <DiffusionConstant>0.32</DiffusionConstant>
                <GlobalDecayConstant>0.025</GlobalDecayConstant>
                <AdditionalTerm>min(0.5,max(0,-0.05*u+0.0*w+0.25))</AdditionalTerm>
            </DiffusionData>
            <!-- <SecretionData> -->
                <!-- <Secretion Type="NonSecretingCells">0.5</Secretion> -->
            <!-- </SecretionData> -->
        </DiffusionField>
        <DiffusionField>
            <DiffusionData>
                <FieldName>w</FieldName>
                <DiffusionConstant>3.2</DiffusionConstant>
                <GlobalDecayConstant>0.06</GlobalDecayConstant>
                <AdditionalTerm>min(0.5,max(0,0.016*u-0.03*v+0.24))</AdditionalTerm>
            </DiffusionData>
            <!-- <SecretionData> -->
                <!-- <Secretion Type="NonSecretingCells">0.7</Secretion> -->
            <!-- </SecretionData> -->
        </DiffusionField>
    </Steppable>

<Plugin Name="Chemotaxis">
   
   <!-- You may repeat ChemicalField element for each chemical field declared in the PDE solvers -->
   <!-- Specification of chemotaxis properties of select cell types. -->
   <ChemicalField Name="Melanophores2">
      <ChemotaxisByType  Lambda="10.0" Type="Melanophores2"/>

   </ChemicalField>
      <ChemicalField Name="Xanthophores2">
      <ChemotaxisByType  Lambda="10.0" Type="Xanthophores2"/>

   </ChemicalField>
</Plugin>
    <!-- Initial layout of cells in the form of rectangular slab -->
    <Steppable Type="UniformInitializer">
        <!-- <Region> -->
            <!-- <BoxMin x="2" y="2" z="0"/> -->
            <!-- <BoxMax x="98" y="98" z="1"/> -->
            <!-- <Gap>1</Gap> -->
            <!-- <Width>1</Width> -->
            <!-- <Types>SecretingCells,NonSecretingCells</Types> -->
        <!-- </Region> -->
        <Region>
            <BoxMin x="0" y="63" z="0"/>
            <BoxMax x="128" y="64" z="1"/>
            <Gap>3</Gap>
            <Width>5</Width>
            <Types>Melanophores</Types>
        </Region>
        <!-- <Region> -->
            <!-- <BoxMin x="0" y="50" z="0"/> -->
            <!-- <BoxMax x="128" y="51" z="1"/> -->
            <!-- <Gap>3</Gap> -->
            <!-- <Width>5</Width> -->
            <!-- <Types>Melanophores</Types> -->
        <!-- </Region> -->
        <!-- <Region> -->
            <!-- <BoxMin x="0" y="75" z="0"/> -->
            <!-- <BoxMax x="128" y="76" z="1"/> -->
            <!-- <Gap>3</Gap> -->
            <!-- <Width>5</Width> -->
            <!-- <Types>Melanophores</Types> -->
        <!-- </Region> -->
        <!-- <Region> -->
            <!-- <BoxMin x="0" y="60" z="0"/> -->
            <!-- <BoxMax x="40" y="65" z="1"/> -->
            <!-- <Gap>10</Gap> -->
            <!-- <Width>5</Width> -->
            <!-- <Types>SecretingCells</Types> -->
        <!-- </Region> -->
        <!-- <Region> -->
            <!-- <BoxMin x="70" y="60" z="0"/> -->
            <!-- <BoxMax x="128" y="65" z="1"/> -->
            <!-- <Gap>10</Gap> -->
            <!-- <Width>5</Width> -->
            <!-- <Types>SecretingCells</Types> -->
        <!-- </Region> -->
                <!-- <Region> -->
            <!-- <BoxMin x="0" y="40" z="0"/> -->
            <!-- <BoxMax x="40" y="45" z="1"/> -->
            <!-- <Gap>10</Gap> -->
            <!-- <Width>5</Width> -->
            <!-- <Types>SecretingCells</Types> -->
        <!-- </Region> -->
        <!-- <Region> -->
            <!-- <BoxMin x="70" y="40" z="0"/> -->
            <!-- <BoxMax x="128" y="45" z="1"/> -->
            <!-- <Gap>10</Gap> -->
            <!-- <Width>5</Width> -->
            <!-- <Types>SecretingCells</Types> -->
        <!-- </Region> -->
                <!-- <Region> -->
            <!-- <BoxMin x="0" y="80" z="0"/> -->
            <!-- <BoxMax x="40" y="85" z="1"/> -->
            <!-- <Gap>10</Gap> -->
            <!-- <Width>5</Width> -->
            <!-- <Types>SecretingCells</Types> -->
        <!-- </Region> -->
        <!-- <Region> -->
            <!-- <BoxMin x="70" y="80" z="0"/> -->
            <!-- <BoxMax x="128" y="85" z="1"/> -->
            <!-- <Gap>10</Gap> -->
            <!-- <Width>5</Width> -->
            <!-- <Types>SecretingCells</Types> -->
        <!-- </Region> -->
        
    </Steppable>
</CompuCell3D>
